PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = False
  Show mouse = True
  expName = stair
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound = A
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'a', 'e'
      startVal [time (s)] = 1.0
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    CodeComponent code
      Begin Experiment:
        import parselmouth
        import numpy as np
        import random

        conditions = ['a', 'e']
        stimulus_files = {'a': 'audio/bat.wav', 'e': 'audio/bet.wav'}

        STANDARD_INTENSITY = 70.
        stimuli = {}
        for condition in conditions:
            stimulus = parselmouth.Sound(stimulus_files[condition])
            stimulus.scale_intensity(STANDARD_INTENSITY)
            stimuli[condition] = stimulus
      Begin Routine:
        random_condition = random.choice(conditions)
        random_stimulus = stimuli[random_condition]

        noise_samples = np.random.normal(size=random_stimulus.num_samples)
        noise = parselmouth.Sound(noise_samples, sampling_frequency=random_stimulus.sampling_frequency)
        noise.scale_intensity(STANDARD_INTENSITY - level)

        noisy_stimulus = random_stimulus.copy()
        noisy_stimulus_values = noisy_stimulus.values
        noisy_stimulus_values += noise.values
        noisy_stimulus.scale_intensity(STANDARD_INTENSITY)

        # 'filename' variable is set by PsychoPy and contains base file name of saved log/output files, so we'll use that to save our custom stimuli, too
        stimulus_file_name = filename + '_stimulus_' + str(trials.thisTrialN) + '.wav'
        noisy_stimulus.resample(44100).save(stimulus_file_name, parselmouth.SoundFileFormat.WAV)
        sound_1.setSound(stimulus_file_name)
      End Routine:
        trials.addResponse(key_resp_2.keys == random_condition)
    TextComponent text
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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      text:
        Bat: press 'a'

        Bet: press 'e'
Flow
  LoopInitiator trials loopType="StairHandler"
    min value = -50
    N reversals = 0
    loopType = staircase
    nReps = 50
    start value = 10
    N up = 1
    max value = 50
    N down = 3
    step type = lin
    step sizes = [2]
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    Routine trial
  LoopTerminator trials
